'PCO2 related code
'### Serial Port ###
' Const SerialPCO2 = 40 'RS232


'### Data Variables ###
Dim RawPCO2 As String * 1000
Dim RawPCO2_Air As String * 100
Dim RawPCO2_Water As String * 100

Const PCO2_Water_Tag = "W M"
Const PCO2_Air_Tag = "A M"

Dim PCO2_Water(14) As String : Alias PCO2 = PCO2_W_Year, PCO2_W_Month, PCO2_W_Day, PCO2_W_Hour, PCO2_W_Minute, PCO2_W_Second, PCO2_W_Zero, PCO2_W_AD, PCO2_W_CO2, Ave_W_IRGA, PCO2_W_Humidity, PCO2_W_Temp, PCO2_W_Gaz_Pressure, PCO2_W_Voltage
Dim PCO2_Air(14) As String : Alias PCO2 = PCO2_A_Year, PCO2_A_Month, PCO2_A_Day, PCO2_A_Hour, PCO2_A_Minute, PCO2_A_Second, PCO2_A_Zero, PCO2_A_AD, PCO2_A_CO2, Ave_A_IRGA, PCO2_A_Humidity, PCO2_A_Temp, PCO2_A_Gaz_Pressure, PCO2_A_Voltage

Public PCO2_Last_Sampling As Long
Public PCO2IsSampling As Boolean

Dim PCO2AirIsDownloaded = false
Dim PCO2WaterIsDownloaded = false

Dim UpdatePCO2Tables As Boolean = false


'### Units ###
Units PCO2_W_CO2 = ppm
Units PCO2_A_CO2 = ppm
Units PCO2_W_Gaz_Pressure = mbar
Units PCO2_A_Gaz_Pressure = mbar
Units PCO2_W_Humidity = % ' <------------------- Why ? FIXME
Units PCO2_A_Humidity = % 'added  FIXME


'### Tables ###
DataTable(FilePCO2W,UpdatePCO2Tables,-1)
  DataInterval(0,0,Sec,10)
  Sample (1,PCO2_Water_Tag,String) ' Is it nescessary ? FIXME
  Sample (1,PCO2_W_Year &"-"& PCO2_W_Month &"-"& PCO2_W_Day,String) : FieldNames("PCO2_W_Date")
  Sample (1,PCO2_W_Hour &":"& PCO2_W_Minute &":"& PCO2_W_Second,String) : FieldNames("PCO2_W_Time")
  Sample (1,PCO2_W_Zero,IEEE4)
  Sample (1,PCO2_W_AD,IEEE4)
  Sample (1,PCO2_W_CO2,String)
  Sample (1,Ave_W_IRGA,IEEE4)
  Sample (1,PCO2_W_Humidity,IEEE4)
  Sample (1,PCO2_W_Temp,IEEE4)
  Sample (1,PCO2_W_Gaz_Pressure,IEEE4)
  Sample (1,PCO2_W_Voltage,IEEE4)
  Sample (1,RawPCO2,String)
  Sample (1,RawPCO2_Water,String)
EndTable

DataTable(FilePCO2A,UpdatePCO2Tables,-1)
  DataInterval(0,0,Sec,10)
  Sample (1,PCO2_Air_Tag,String) ' Is it nescessary ? FIXME
  Sample (1,PCO2_A_Year &"-"& PCO2_A_Month &"-"& PCO2_A_Day,String) : FieldNames("PCO2_A_Date")
  Sample (1,PCO2_A_Hour &":"& PCO2_A_Minute &":"& PCO2_A_Second,String) : FieldNames("PCO2_A_Time")
  Sample (1,PCO2_A_Zero,IEEE4)
  Sample (1,PCO2_A_AD,IEEE4)
  Sample (1,PCO2_A_CO2,String)
  Sample (1,Ave_A_IRGA,IEEE4)
  Sample (1,PCO2_A_Humidity,IEEE4)
  Sample (1,PCO2_A_Temp,IEEE4)
  Sample (1,PCO2_A_Gaz_Pressure,IEEE4)
  Sample (1,PCO2_A_Voltage,IEEE4)
  Sample (1,RawPCO2,String)
   Sample (1,RawPCO2_Air,String)
EndTable


Function PCO2TagString As String
  Dim PCO2_A_CO2_F = "#.#"
  Dim PCO2_A_CO2_W = "#.#"
  
  If PCO2_W_CO2 <> "" Then
    PCO2_W_CO2_F = PCO2_W_CO2
  EndIf

  If PCO2_A_CO2 <> "" Then 
    PCO2_A_CO2_F = PCO2_A_CO2
  Endif
    
  PCO2TagString = "[PCO2]" & PCO2_W_CO2 & "," & PCO2_A_CO2 & "," & PCO2_W_Gaz_Pressure & "," & PCO2_A_Gaz_Pressure & "," & PCO2_A_Humidity
EndFunction


'### Sampling ###

Sub StartPCO2
  If (SBE37_In_Saltwater OR Bypass_Salinity) Then
    WhereAmI = "Start PCO2"  

    RawPCO2 = ""
    RawPCO2_Water = "" ' Also set to "" at the end of the Scan if PCO2 Tables were updated
    RawPCO2_Air = ""   ' Also set to "" at the end of the Scan if PCO2 Tables were updated

    PCO2_Water() = "" 
    PCO2_Air() = ""


    SerialOpen(SerialPCO2,19200,3,20,500)
    Delay(1,1,Sec)
    SerialFlush(SerialPCO2)
    SerialOut(SerialPCO2,CHR(27),"",2,50)
    Delay (1,500,mSec)
    SerialOut(SerialPCO2,CHR(27),"",1,0)
    Delay (1,500,mSec)
    SerialOut(SerialPCO2,"1","",1,0)
    Delay (1,500,mSec)
    SerialOut(SerialPCO2,"s","",1,0)
    SerialFlush(SerialPCO2)
    
    PCO2IsSampling = true
    PCO2_Last_Sampling = Public.TimeStamp(1)
    PCO2WaterIsDownloaded = false
    PCO2AirIsDownloaded = false
  EndIf
EndSub


Sub ClosePC02
  SerialFlush(SerialPCO2)
  SerialClose(SerialPCO2)
EndSub


Function GetPCO2_Data(PCO2_Tag) As String
  'PCO2_Tag = "A M" or "W M"
  Start_Pos = InStr(1,RawPCO2,PCO2_Tag & ",",4) 'Search in RawPCO2
  End_Pos = InStr(Start_Pos,RawPCO2,CHR(10),2)
  If PCO2WStart <> 0 AND PCO2WEnd <> 0 Then
    GetPCO2_Data = Mid(RawPCO2,Start_Pos, End_Pos - Start_Pos) 'Get the data from RawPCO2
  Else
    GetPCO2_Data = ""
  EndIf
EndFunction


Sub DownloadPCO2
  SerialIn(RawPCO2,SerialPCO2,10,"Sample Complete",500)

  If NOT PCO2WaterIsDownloaded Then
    RawPCO2_Water = GetPCO2_Data(PCO2_Water_Tag)
    If RawPCO2_Water <> = "" Then
      PCO2WaterIsDownloaded = true
    EndIf
  EndIf

  If NOT PCO2AirIsDownloaded Then
    RawPCO2_Air = GetPCO2_Data(PCO2_Air_Tag)
    If RawPCO2_Air <> = "" Then
      PCO2AirIsDownloaded = true
    EndIf
  EndIf
End


Sub CollectPCO2  
  SplitStr(PCO2_Water,RawPCO2_Water,",",14,0)
  SplitStr(PCO2_Air,RawPCO2_Air,",",14,0)

  UpdatePCO2Tables = true
EndSub


Sub PCO2WatchDog
 'Watchdog if there's no data in 1Hour (if power disconnected during sampling) # FIXME MAKE A TIMER | Put it in another slow sequence
  If (PCO2_Last_Sampling + 3600) < time_stamp Then  
    If PCO2WaterIsDownloaded OR PCO2AirIsDownloaded Then
      Call CollectPCO2
    EndIf  
      
    Call ClosePC02
    PCO2IsSampling = false
  EndIf
EndSub


Sub PCO2Sampling
  Dim time_stamp
  
  If With_PCO2 Then
    WhereAmI = "Entering PCO2 Loop"
    time_stamp = Public.TimeStamp(1)
    
    If PCO2IsSampling Then
      Call DownloadPCO2
      
      If PCO2WaterIsDownloaded AND PCO2AirIsDownloaded Then
        Call CollectPCO2
        Call ClosePC02
    
        TAGString = PCO2TagString()
        Call WriteTagString

        PCO2IsSampling = false
      Else
        Call PCO2WatchDog
      EndIf
    
    ElseIf (PCO2_Last_Sampling + (PCO2_Interval_Hr*3600) - 60 <= time_stamp) Then 'minus 60sec to not skip a scan planned at PCO2_Interval hour (got 3599s and didn't sampled)
      Call StartPCO2  
    EndIf

  EndIf
EndSub

Sub ResetPCO2RawStrings
  If UpdatePCO2Tables Then
    RawPCO2_Air = ""
    RawPCO2_Water = ""
    PCO2WaterIsDownloaded = false
    PCO2AirIsDownloaded = false
  EndIf
EndSub
